<PlusConfiguration version="2.0">

  <DataCollection StartupDelaySec="2.0" >
    <DeviceSet 
      Name="PlusServer: Video for Linux video capture device"
      Description="Broadcasting acquired video through OpenIGTLink" />
    <Device
      Id="VideoDevice" 
      DeviceName="/dev/video0"
      Type="VFLVideo" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />     
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18945" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
